'CR1000X Series
'Created by Short Cut (4.4)

'Declare Variables and Units
'General Variables
Public BattV
Public PTemp_C
Public Temp_C

'Inflow Variables
Public Range_mm_st As String * 100
Public Num_bytes
Public Range_mm As Float
Public Depth_mm As Float
Public Depth_orf As Float
Public Depth_weir As Float
Public Flow_total As Float
Public Flow_weir As Float
Public Flow_orf As Float
Public Flow_cum = 0.0
Public Flow_cum_dt As Float

'Pond Variables
Public Range_mm_st_p As String * 100
Public Num_bytes_p
Public Range_mm_p As Float
Public Depth_mm_p As Float

'Rain Variables
Public Rain_in

Units BattV=Volts
Units PTemp_C=Deg C
Units Temp_C=Deg C
Units Range_mm = mm
Units Depth_mm = mm
Units Depth_orf = mm
Units Depth_weir = mm
Units Flow_total = cfs
Units Flow_weir = cfs
Units Flow_orf = cfs
Units Flow_cum = cf
Units Flow_cum_dt = Sec

Units Range_mm_st_p = mm
Units Num_bytes_p = bytes
Units Range_mm_p = mm
Units Depth_mm_p = mm

Units Rain_in=inch

Const Datum = 1500 ' distance to the floor/bottom (depth = 0) in mm
Const Datum_p = 1500 ' distance to ground in pond (depth = 0) in mm

Const D_orf = 1*25.4 'diameter of the orifice in mm
Const Ang_weir = 120 ' Angle of the weir in degrees
Const H_gap = 7.25*25.4 ' Distance between floor and bottom of weir in mm
Const H_orf = 13 ' Distance between floor and bottom of orifice in mm
Const H_min = 30 'Minimum water depth to calculate flow in mm
Const C_orf = 0.6 ' Orifice discharge coefficient
Const Dens_water = 1000 ' density of water in kg/m^3
Const g = 9.81 ' acceleration due to gravity in kg m/s^2
Const C_weir = 0.607165052-0.000874466963*Ang_weir+0.00000610393334*Ang_weir^2
Const k_weir = 0.0144902648 - 0.00033955535*Ang_weir  + 0.00000329819003*Ang_weir^2 _
- 0.0000000106215442*Ang_weir^3
Const pi = 3.14159
Const Sampler_flow_thresh = 129 'flow threshold for sample to be collected in ft^3

'Define Data Tables

DataTable(FiveMinute,True,-1)
  DataInterval(0,5,Min,10)
  TableFile("CRD:Sweetwater_Inflow_rain",64,-1,0,1,Day,0,0)
	Average(1,Temp_C,FP2,False)
	Average(1,Range_mm,FP2,False)
	Average(1,Depth_mm,FP2,False)
	Average(1,Flow_total,FP2,False)
	Average(1,Range_mm_p,FP2,False)
	Average(1,Depth_mm_p,FP2,False)
	Totalize(1,Rain_in,FP2,False)
EndTable

'Main Program
BeginProg
  SerialOpen(ComC1,9600,16,0,100)
  SerialOpen(ComC3,9600,16,0,100)
  'Timer(1,uSec,0)
	'Main Scan
	Scan(10,Sec,3,0)
		'Default CR1000X Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR1000X Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'Type T Thermocouple measurements 'Temp_C'
		TCDiff(Temp_C,1,mv200C,1,TypeT,PTemp_C,True,0,60,1,0)
		
    'Get rain measurement
    PulseCount(Rain_in,1,P1,1,0,0.01,0)

    ' Bring in data from range sensors and calculate depths
		SerialInRecord(ComC1,Range_mm_st,82,0,&H0D,Num_bytes,00) 'Weir sensor
		Range_mm = Range_mm_st
		Depth_mm = Datum - Range_mm
		
  	SerialInRecord(ComC3,Range_mm_st_p,82,0,&H0D,Num_bytes_p,00) 'Pond sensor
		Range_mm_p = Range_mm_st_p
		Depth_mm_p = Datum_p - Range_mm_p
		
    ' Calculate flow rate
    If Depth_mm < H_min Then
      Depth_weir = 0
      Depth_orf = 0
      Flow_weir = 0
      Flow_orf = 0
      
    Else 
      Depth_orf = Depth_mm-H_orf
      Flow_orf = C_orf*pi/4*(D_orf/1000)^2*(2*Depth_orf/1000*Dens_water*g _
      *Dens_water)^(1/2)/Dens_water*35.3
      If Depth_mm < H_gap Then
        Depth_weir = 0
        Flow_weir = 0
      Else
        Depth_weir = Depth_mm - H_gap
        Flow_weir = 4.28*C_weir*TAN(Ang_weir*pi/180/2)*(Depth_weir/25.4/12+k_weir)^(5/2)
      EndIf
    EndIf
    
    Flow_total = Flow_orf + Flow_weir
    
    'Flow cumulation
    Flow_cum_dt = Timer(1,0,4)/10^6
    Timer(1,0,2)
    If Flow_total <> NAN Then
      Flow_cum += Flow_total*Flow_cum_dt
    EndIf
    If Flow_cum > Sampler_flow_thresh Then
      PulsePort(C5,25000)
      Flow_cum = 0
    EndIf
		'Call Data Tables and Store Data
		CallTable FiveMinute
	NextScan
EndProg
